PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1080]
  expName = handmovement
  keyboardBackend = ioHub
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Routines
  Routine instruction_baseline
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    TextComponent instruction_baseline_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The green cursor represents the position of your hand movement.

        You must start from the starting point in the center of the screen and move towards to hit the black target point that appears.

        You should move in a straight line as fast and accurately as you can towards the target.

        Once you hit the target, return to the starting point and wait for the next target to appear.

        Click anywhere to continue...
    MouseComponent instruction_baseline_mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine baseline
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    CodeComponent code_baseline
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.tools.coordinatetools import cart2pol
        from psychopy.tools.coordinatetools import pol2cart

        # 计算欧氏距离
        def euclidean_dist(vec1, vec2):
            return sqrt((vec1[0] - vec2[0])**2 + (vec1[1] - vec2[1])**2)

        # might change depending on which computer/screen is being used
        target_radius = 12
        # rotation angle
        angle = 30.0
      Begin Routine:
        win.mouseVisible = False

        # 初始化必要的变量和标志位
        move_start = False
        feedback_start = False

        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()

        movement_frames = []  # 用于保存mouse运动的每一帧位置

        lastPos = mouse_baseline.getPos()

        # 计算ring的半径
        x_mouse, y_mouse = mouse_baseline.getPos()
        #ring_radius = euclidean_dist([fixation_ring.pos[0],fixation_ring.pos[1]], [x_mouse,y_mouse])
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])

        Ring_W = ring_radius
        Ring_H = ring_radius

        # feedback位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

        if not move_start and not feedback_start:
            # 在此处设置ring的大小
            ring_baseline.size = (ring_radius, ring_radius)  # 设置ring的大小

        mouse_startpoint_ring_baseline.opacity = 0
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_baseline.getPos()
        ring_radius = euclidean_dist([fixation_ring_baseline.pos[0],fixation_ring_baseline.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_baseline.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        fixation_ring_baseline.opacity = 0
        ring_baseline.opacity = 0
        mouse_startpoint_ring_baseline.opacity = 0
        feedback_ring_baseline.opacity = 0

        ## 【before start】
        if not move_start and not feedback_start:
            # see if fixation ring shows
            if ring_radius <= 0.8:
                fixation_ring_baseline.opacity = 1
                ring_baseline.opacity = 0
                mouse_startpoint_ring_baseline.opacity = 0
                # see if mouse_startpoint_ring shows
                if ring_radius < 0.5:
                    mouse_startpoint_ring_baseline.opacity = 1
                else:
                    mouse_startpoint_ring_baseline.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_baseline.opacity = 1
                fixation_ring_baseline.opacity = 0
                mouse_startpoint_ring_baseline.opacity = 0

            # 判断鼠标在原点是否停留足够的时间（2s）以致于target出现
            if mouse_startpoint_ring_baseline.opacity == 1 and mouse_startpoint_time.getTime() >= 2:
                target_baseline.opacity = 1
                #判断movement何时开始
                if mouseDist > 0.05:
                    move_start = 1
                    RT = target_show_time.getTime()
                else:
                    move_start = 0
                    move_start_time.reset()
            else:
                target_baseline.opacity = 0
                target_show_time.reset()
        #    #判断movement何时开始
        #    if target_baseline.opacity == 1 and mouseDist > 0.1:
        #        move_start = 1
        #        RT = target_show_time.getTime()
        #    else:
        #        move_start = 0
        #        move_start_time.reset()

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_baseline.getPos())
            target_baseline.opacity = 0
            mouse_startpoint_ring_baseline.opacity = 0
            ring_baseline.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 2:
            if move_start_time.getTime() > 1.5:
                move_start = 0
                feedback_start = 1
            else:
                move_start = 1
                feedback_start = 0
                move_end_time.reset()

        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= 2:  # feedback delay暂时设为2s
                # feedback位置的转换
                [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
                [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)
                feedback_ring_baseline.opacity = 1
                target_baseline.opacity = 1
            else:
                feedback_ring_baseline.opacity = 0
                target_baseline.opacity = 0
                feedback_start_time.reset()

            if feedback_ring_baseline.opacity == 1 and feedback_start_time.getTime() >= 1:  # feedback duration暂时设为1s
                feedback_ring_baseline.opacity = 0
                target_baseline.opacity = 0
                continueRoutine = False
        else:
            feedback_ring_baseline.opacity = 0
      End Routine:
        thisExp.addData('RT', RT)
        thisExp.addData('movement_frames', movement_frames)
    MouseComponent mouse_baseline
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_baseline
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = [Ring_W, Ring_H]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_baseline
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent mouse_startpoint_ring_baseline
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = [x_mouse,y_mouse]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent target_baseline
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent feedback_ring_baseline
      fillColor = red
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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  Routine end
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    TextComponent text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = thanks
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction_rotation
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    TextComponent instruction_rotation_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Brief Rest Period

        In the next trials, the green cursor still represents your hand movements, but it will appear on the screen with some deviation.

        As before, you must try to hit the black target point with the green cursor.


        Click anywhere to continue the experiment...
    MouseComponent instruction_rotation_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine rotation
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    CodeComponent code_rotation
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False

        # 初始化必要的变量和标志位
        move_start = False
        feedback_start = False

        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()

        movement_frames = []  # 用于保存mouse运动的每一帧位置

        lastPos = mouse_rotation.getPos()

        # 计算ring的半径
        x_mouse,y_mouse = mouse_rotation.getPos()
        #ring_radius = euclidean_dist([fixation_ring.pos[0],fixation_ring.pos[1]], [x_mouse,y_mouse])
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])

        Ring_W = ring_radius
        Ring_H = ring_radius
        # feedback位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse - angle, target_radius)

        if not move_start and not feedback_start:
            # 在此处设置ring的大小
            ring_rotation.size = (ring_radius, ring_radius)  # 设置ring的大小

        mouse_startpoint_ring_rotation.opacity = 0
      Each Frame:
        x_mouse,y_mouse = mouse_rotation.getPos()
        ring_radius = euclidean_dist([fixation_ring_rotation.pos[0],fixation_ring_rotation.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        thisPos = mouse_rotation.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos

        fixation_ring_rotation.opacity = 0
        ring_rotation.opacity = 0
        mouse_startpoint_ring_rotation.opacity = 0
        feedback_ring_rotation.opacity = 0

        ## 【before start】
        if not move_start and not feedback_start:

            # 判断是否该出现fixation ring
            if ring_radius <= 0.8:
                fixation_ring_rotation.opacity = 1
                ring_rotation.opacity = 0  # 隐藏ring
                mouse_startpoint_ring_rotation.opacity = 0
                # 判断是否该出现mouse_startpoint_ring
                if ring_radius < 0.5:
                    mouse_startpoint_ring_rotation.opacity = 1
                else:
                    mouse_startpoint_ring_rotation.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_rotation.opacity = 1
                fixation_ring_rotation.opacity = 0
                mouse_startpoint_ring_rotation.opacity = 0

            # 判断鼠标在原点是否停留足够的时间（2s）以致于target出现
            if mouse_startpoint_ring_rotation.opacity == 1 and mouse_startpoint_time.getTime() >= 2:
                target_rotation.opacity = 1
                # 判断movement何时开始
                if mouseDist > 0.05:
                    move_start = 1
                    RT = target_show_time.getTime()
                else:
                    move_start = 0
                    move_start_time.reset()
            else:
                target_rotation.opacity = 0
                target_show_time.reset()

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_rotation.getPos())

            target_rotation.opacity = 0
            mouse_startpoint_ring_rotation.opacity = 0
            ring_rotation.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 2:
            if move_start_time.getTime() > 1.5:
                move_start = 0
                feedback_start = 1
            else:
                move_start = 1
                feedback_start = 0
                move_end_time.reset()

        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= 2:  # feedback delay暂时设为2s
                # feedback位置的转换
                [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
                [feedback_x, feedback_y] = pol2cart(theta_mouse - angle, target_radius)
                feedback_ring_rotation.opacity = 1
                target_rotation.opacity = 1
            else:
                feedback_ring_rotation.opacity = 0
                target_rotation.opacity = 0
                feedback_start_time.reset()

            if feedback_ring_rotation.opacity == 1 and feedback_start_time.getTime() >= 1:  # feedback duration暂时设为1s
                feedback_ring_rotation.opacity = 0
                target_rotation.opacity = 0
                continueRoutine = False
        else:
            feedback_ring_rotation.opacity = 0
      End Routine:
        thisExp.addData('RT', RT)
        thisExp.addData('movement_frames', movement_frames)
    MouseComponent mouse_rotation
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_rotation
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = [Ring_W, Ring_H]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_rotation
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent mouse_startpoint_ring_rotation
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = [x_mouse, y_mouse]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent target_rotation
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent feedback_ring_rotation
      fillColor = red
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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  Routine aftereffect
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    CodeComponent code_aftereffect
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False

        # 初始化必要的变量和标志位
        move_start = False
        feedback_start = False

        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()

        movement_frames = []  # 用于保存mouse运动的每一帧位置

        lastPos = mouse_aftereffect.getPos()

        # 计算ring的半径
        x_mouse,y_mouse = mouse_aftereffect.getPos()
        #ring_radius = euclidean_dist([fixation_ring.pos[0],fixation_ring.pos[1]], [x_mouse,y_mouse])
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])

        Ring_W = ring_radius
        Ring_H = ring_radius
        # feedback位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

        if not move_start and not feedback_start:
            # 在此处设置ring的大小
            ring_aftereffect.size = (ring_radius, ring_radius)  # 设置ring的大小

        mouse_startpoint_ring_aftereffect.opacity = 0
      Each Frame:
        x_mouse,y_mouse = mouse_aftereffect.getPos()
        ring_radius = euclidean_dist([fixation_ring_aftereffect.pos[0],fixation_ring_aftereffect.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        thisPos = mouse_aftereffect.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos

        fixation_ring_aftereffect.opacity = 0
        ring_aftereffect.opacity = 0
        mouse_startpoint_ring_aftereffect.opacity = 0
        feedback_ring_aftereffect.opacity = 0

        ## 【before start】
        if not move_start and not feedback_start:

            # 判断是否该出现fixation ring
            if ring_radius <= 0.8:
                fixation_ring_aftereffect.opacity = 1
                ring_aftereffect.opacity = 0  # 隐藏ring
                mouse_startpoint_ring_aftereffect.opacity = 0
                # 判断是否该出现mouse_startpoint_ring
                if ring_radius < 0.5:
                    mouse_startpoint_ring_aftereffect.opacity = 1
                else:
                    mouse_startpoint_ring_aftereffect.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_aftereffect.opacity = 1
                fixation_ring_aftereffect.opacity = 0
                mouse_startpoint_ring_aftereffect.opacity = 0

            # 判断鼠标在原点是否停留足够的时间（2s）以致于target出现
            if mouse_startpoint_ring_aftereffect.opacity == 1 and mouse_startpoint_time.getTime() >= 2:
                target_aftereffect.opacity = 1
            else:
                target_aftereffect.opacity = 0
                target_show_time.reset()
            #判断movement何时开始
            if target_aftereffect.opacity == 1 and mouseDist > 0.05:
                move_start = 1
                RT = target_show_time.getTime()
            else:
                move_start = 0
                move_start_time.reset()

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_aftereffect.getPos())

            target_aftereffect.opacity = 0
            mouse_startpoint_ring_aftereffect.opacity = 0
            ring_aftereffect.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 2:
            if move_start_time.getTime() > 1.5:
                move_start = 0
                feedback_start = 1
            else:
                move_start = 1
                feedback_start = 0
                move_end_time.reset()

        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= 2:  # feedback delay暂时设为2s
                target_aftereffect.opacity = 1
            else:
                feedback_ring_aftereffect.opacity = 0
                target_aftereffect.opacity = 0
                feedback_start_time.reset()
            if target_aftereffect.opacity == 1 and feedback_start_time.getTime() >= 1:  # feedback duration暂时设为1s
                feedback_ring_aftereffect.opacity = 0
                target_aftereffect.opacity = 0
                continueRoutine = False
        else:
            feedback_ring_aftereffect.opacity = 0
      End Routine:
        thisExp.addData('RT', RT)
        thisExp.addData('movement_frames', movement_frames)
    MouseComponent mouse_aftereffect
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_aftereffect
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = [Ring_W, Ring_H]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_aftereffect
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent mouse_startpoint_ring_aftereffect
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = [x_mouse, y_mouse]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent target_aftereffect
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent feedback_ring_aftereffect
      fillColor = red
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = cm
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  Routine instruction_aftereffect
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    TextComponent instruction_aftereffect_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of Cursor Movement Phase


        You need to move to target points directly with your hand, without using any strategy.

        However, there will be no cursor to indicate the position of your hand movement in the next trials.

        Click anywhere to continue the experiment...
    MouseComponent instruction_aftereffect_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  Routine instruction_baseline
  LoopInitiator baseline_trials loopType="TrialHandler"
    conditionsFile = conditions_baseline.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_x': 3, 'target_y': 5, 'rotation': 0},
      {'target_x': -3, 'target_y': -5, 'rotation': 0}]
    Routine baseline
  LoopTerminator baseline_trials
  Routine instruction_rotation
  LoopInitiator rotation_trials loopType="TrialHandler"
    conditionsFile = conditions_rotation.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_x': 3, 'target_y': 5, 'rotation': 1},
      {'target_x': -3, 'target_y': -5, 'rotation': 1},
      {'target_x': 3, 'target_y': 5, 'rotation': 1},
      {'target_x': -3, 'target_y': -5, 'rotation': 1}]
    Routine rotation
  LoopTerminator rotation_trials
  Routine instruction_aftereffect
  LoopInitiator aftereffect_trials loopType="TrialHandler"
    conditionsFile = conditions_aftereffect.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_x': 3, 'target_y': 5, 'aftereffect': 1},
      {'target_x': -3, 'target_y': -5, 'aftereffect': 1},
      {'target_x': 3, 'target_y': 5, 'aftereffect': 1},
      {'target_x': -3, 'target_y': -5, 'aftereffect': 1}]
    Routine aftereffect
  LoopTerminator aftereffect_trials
  Routine end
